// ChriSTORM toolset by Christophe Leterrier
// Icons are Fugue Icons (C) 2013 Yusuke Kamiyamane. All rights reserved.
// 15-01-19

// Tool 14
macro "Batch NSTORM into ThunderSTORM Action Tool - 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"{

	run("Batch NS Into TS");

}

// Tool 15
macro "Batch Process ThunderSTORM Locs Action Tool - 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"{

	run("Batch Process Locs");

}

// Tool 16
macro "Transform ThunderSTORM Locs Action Tool - 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" {

	run("Transform TS");

}

// Tool 17
macro "Rotate ThunderSTORM Locs Action Tool - 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" {

	run("Rotate TS");

}



// Tool 18
macro "Import ThunderSTORM Locs Action Tool - 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"{

	run("Import results");

}

// Tool 19
macro "Run ThunderSTORM Action Tool - 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"{

	run("Run analysis");

}
// Tool 20
macro "Generate Reconstructions Action Tool - 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"{

	run("Generate Reconstructions");

}
// Tool 21
var boxSize = 20;

macro "Box ROI Tool - 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"{

	getCursorLoc(x, y, z, flags);
	left = 16
	while ((flags&left)!=0) {
    	getCursorLoc(x, y, z, flags);
    	makeRectangle(x-(boxSize/2),y-(boxSize/2),boxSize,boxSize);
    	wait(10);
  		}
	}

macro "Box ROI Tool Options" {
	boxSize = getNumber("Box size (px): ", boxSize);
	}

// Tool 24
macro "Line ROIs to Slices Action Tool - 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"{
	
	run("Line ROIs to Slices");

}


// Tool 23
macro "Generate Zooms & Slices Action Tool - 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"{

	run("Generate Zoom & Slices");

}


// Tool 24
macro "Workflow Action Tool - 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"{
	run("Workflow ");
}
